PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Norming_Study_exp
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Routines
  Routine WelcomeScreen
    TextComponent text_WelcomeScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Hallo und vielen Dank dass Du an meiner Studie teilnimmst.

        Drücke die Leertaste um fortzufahren.
    KeyboardComponent key_resp_WelcomeScreen
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
    TextComponent text_GoodbyeScreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Vielen Dank, dass Du an meinem Experiment teilgenommen hast.
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  Routine Trial
    TextComponent text_Trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
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    SliderComponent slider_Trial
      forceEndRoutine = True
      granularity = 1
      labels = "sehr männlich", "", "", "neutral", "", "", "sehr weiblich"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Blank500
    TextComponent text_Blank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Blank1000
    TextComponent text_Blank1000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Intro1
    TextComponent text_Intro1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ich versuche zu verstehen wie Vornamen im mentalen Lexikon abgespeichert sind und dafür brauche ich (d)eine Datengrundlage. Vorerst brauche ich jedoch noch personenbezogene Daten.  Keine Sorge die Daten werden anonymisiert.

        (Drücke die Leertaste um fortzufahren.)
    KeyboardComponent key_resp_Intro1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Age
    TextComponent text_Age
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte trage auf dem Slider dein Alter ein.

        (Drücke die Leertaste um fortzufahren.)
    SliderComponent slider_Age
      forceEndRoutine = False
      granularity = 1
      labels = ("17-", "18", "19", "20", "21", "22", "23", "24", "25", "26", "27", "28", "29", "30+")
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14)
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    KeyboardComponent key_Age
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro2
    KeyboardComponent key_Intro2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_Intro2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Im Folgenden wirst Du einen Namen sehen sowie einen 7-stelligen Slider. Du bewertest den Namen von ganz links "sehr männlich" bis ganz rechts "sehr weiblich". Die Mitte der Skala zeigt "neutral" an.

        Zum Beispiel würde ich "Uwe" als "sehr männlich", "Gudrun" als "sehr weiblich" und "Alex" als "neutral" bewerten.

        Wichtig ist, NICHT die assoziierten Qualitäten des Namens zu bewerten (Gudrun klingt hart/stark also "männlich"), sondern ob Du eher an einen Mann (der Uwe), eine Frau (die Gudrun) oder vielleicht beide (der/die Alex) denkst.

        Nun Folgen drei Beispiele. Drücke die Leertaste.
  Routine Muttersprachler
    TextComponent text_Muttersprachler
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bist du deutsche Muttersprachlerin oder deutscher Muttersprachler?

        (Drücke die Leertaste um fortzufahren.)
    SliderComponent slider_Muttersprache
      forceEndRoutine = False
      granularity = 1
      labels = ("ja", "nein")
      letterHeight = 0.04
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2)
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    KeyboardComponent key_Muttersprachler
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine biologicalSex
    TextComponent text_biologicalSex
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Was ist dein biologisches Geschlecht?

        (Drücke die Leertaste um fortzufahren.)
    SliderComponent slider_biologicalSex
      forceEndRoutine = False
      granularity = 1
      labels = "männlich", "divers", "weiblich"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    KeyboardComponent key_biologicalSex
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GenderIdentity
    TextComponent text_GenderIdentity
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Wie würdest du deine Geschlechtsidentität zuordnen?

        Falls du dies nicht beantworten möchtest, drücke die Leertaste ohne Auswahl um zu beenden.
    SliderComponent slider
      forceEndRoutine = False
      granularity = 1
      labels = "männlich", "", "", "", "", "", "weiblich"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine OtherName
    TextComponent text_Buffer
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
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    SliderComponent slider_Buffer
      forceEndRoutine = True
      granularity = 1
      labels = "sehr männlich", "", "", "neutral", "", "", "sehr weiblich"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Intro3
    TextComponent text_Intro3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Wie du gesehen hast geht es sofort weiter nachdem du auf den Slider geklickt hast. Sei also vorsichtig bei deiner Auswahl.

        Drücke die Leertaste um das Experiment zu starten.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Intro1
  Routine Age
  Routine Muttersprachler
  Routine Intro2
  LoopInitiator trials_OtherName loopType="TrialHandler"
    conditionsFile = Norming_Buffer.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Column1': 1, 'Name': 'Uwe', 'Freq': 4, 'expectedSex': 'm', 'expectedSex2': 'NA'},
      {'Column1': 2, 'Name': 'Gudrun', 'Freq': 1, 'expectedSex': 'w', 'expectedSex2': 'NA'},
      {'Column1': 3, 'Name': 'Alex', 'Freq': 5, 'expectedSex': 'd', 'expectedSex2': 'NA'}]
    Routine Blank500
    Routine OtherName
  LoopTerminator trials_OtherName
  Routine Intro3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Norming_CommonNames_Filtered.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Column1': 1, 'Name': 'Andrea', 'Freq': 4, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 2, 'Name': 'Benja', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 3, 'Name': 'Bente', 'Freq': 5, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 4, 'Name': 'Charlie', 'Freq': 7, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 5, 'Name': 'Chris', 'Freq': 3, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 6, 'Name': 'Daniele', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 7, 'Name': 'Dominique', 'Freq': 6, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 8, 'Name': 'Dylan', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 9, 'Name': 'Eike', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 10, 'Name': 'Elia', 'Freq': 4, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 11, 'Name': 'Finn', 'Freq': 3, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 12, 'Name': 'Florin', 'Freq': 2, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 13, 'Name': 'Gerrit', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 14, 'Name': 'Jamie', 'Freq': 2, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 15, 'Name': 'Janne', 'Freq': 2, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 16, 'Name': 'Jean', 'Freq': 1, 'expectedSex': 'd', 'expectedSex2': 'NA'},
      {'Column1': 17, 'Name': 'Jona', 'Freq': 5, 'expectedSex': 'd', 'expectedSex2': 'NA'}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
    Routine Blank500
    Routine Trial
  LoopTerminator trials
  Routine Blank1000
  Routine biologicalSex
  Routine GenderIdentity
  Routine GoodbyeScreen
