PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Mock-exp
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Routines
  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
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    KeyboardComponent trial_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine comp_q
    TextComponent comp_q_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $CompQuestion
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    KeyboardComponent comp_p_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine resp
    TextComponent resp_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Response
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    KeyboardComponent resp_key_resp
      allowedKeys [set every repeat] = 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine Goodbye
    TextComponent Goodbye_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = goodbye
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  Routine Intro
    TextComponent Intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = Hello
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Flow
  Routine Intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mock.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Name': 'Georg', 'followUp': 1, 'CompQuestion': 'Was tat Georg?', 'Response': 'schreit'},
      {'Name': 'Jakob', 'followUp': 0, 'CompQuestion': 0, 'Response': 0},
      {'Name': 'Jakob', 'followUp': 1, 'CompQuestion': 'NONE', 'Response': 'N/A'},
      {'Name': 'Georg', 'followUp': 1, 'CompQuestion': 'Was tat Georg?', 'Response': 'schreit'}]
    Routine trial
    Routine comp_q
    Routine resp
  LoopTerminator trials
  Routine Goodbye
