PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'E-Mail-Adresse': '', 'Vorname': '', 'Nachname': '', 'Alter': '', 'Links- oder Rechtshänder': '', 'Zweitsprache (1 geringe Kenntnisse - 10 muttersprachlich)': '', '2. Zweitsprache (1 - 10)': '', '3. Zweitsprache (1 - 10)': '', '4. Zweitsprache (1 - 10)': '', '5. Zweitsprache (1 - 10)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Main-Study-exp
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Routines
  Routine Welcome_Screen
    TextComponent Welcome_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = Hallo und vielen Dank für deine Teilnahme.
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  Routine Goodbye_Screen
    TextComponent Goodbye_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        Vielen Dank für deine Teilnahme und bis in zwei Wochen.

        Das Programm schließt sich automatisch.
  Routine Blank500
    TextComponent Blank500_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Explaination_Screen
    TextComponent Explaination_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Im folgenden wirst du je zwei Sätze Stück für Stück lesen.

        Das heißt Du wirst immer ein Wort oder ein Satzstück sehen und Du entscheidest, wann du das nächste Stück sehen möchtest. Du kommst immer mit der Leertaste zum nächsten Wort/Satzstück. Es gibt keine Möglichkeit um zurückzukehren.

        Drücke nun die Leertaste um weiterzukommen.
    KeyboardComponent Explaination_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos01_Name
    TextComponent Pos01_Name_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Name
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    KeyboardComponent Pos01_Name_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Pos02_V
    TextComponent Pos02_V_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $V
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    KeyboardComponent Pos02_V_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos03_PP
    TextComponent Pos03_PP_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $PP_mitPunkt
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    KeyboardComponent Pos03_PP_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos04_PRO
    TextComponent Pos04_PRO_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $PRO
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    KeyboardComponent Pos04_PRO_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos05_3
    TextComponent Pos05_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos05
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    KeyboardComponent Pos05_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos06_2
    TextComponent Pos06_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos06
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    KeyboardComponent Pos06_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos07_2
    TextComponent Pos07_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos07
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    KeyboardComponent Pos07_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos08_2
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  Routine Pos09_2
    TextComponent Pos09_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos09_mitPunkt
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    KeyboardComponent Pos09_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Comp_q
    KeyboardComponent Comp_q_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Comp_q_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Presented
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine Comp_resp
    KeyboardComponent Comp_resp_key_resp
      allowedKeys [set every repeat] = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Comp_Up_resp_text
      letterHeight = 0.08
      pos [set every repeat] = (0,0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Up
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    TextComponent Quest_Down_text
      letterHeight = 0.08
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Down
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine Pause
    TextComponent Pause1_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast 17% geschafft.

        Wenn du möchtest kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause1_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause2
    TextComponent Pause2_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast ein Drittel geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause2_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause3
    TextComponent Pause3_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Super! Du hast die Hälfte geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause3_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause4
    TextComponent Pause4_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast zwei Drittel  geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause4_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause5
    TextComponent Pause5_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Das ist die letzte Pause.

        Du hast es fast geschafft.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause5_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explaination_Screen3
    TextComponent Explaination3_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Soweit alles startklar?

        Bitte sorge für ein ruhiges Umfeld und stell dir wenn du magst ein Getränk parat.

        Falls du soweit bist, drücke die Leertaste um das Experiment zu starten.
    KeyboardComponent Explaination3_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explaination2_Screen
    TextComponent Explaination2_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Manchmal wirst du eine Frage mit zwei Antwortmöglichkeiten über die Sätze beantworten. Lies die Sätze also möglichst genau aber auch so schnell wie möglich. Es ist immer nur eine Antwortmöglichkeit korrekt.

        Die obere Pfeiltaste wählt die obere Antwort aus und die untere Pfeiltaste wählt die untere Antwortmöglichkeit aus.

        Ca alle 3 bis 5 Minuten hast Du eine Pause.

        Jetzt folgen fünf Beispiele an denen Du die Steuerung testen kannst.

        (Drücke die Leertaste um weiter zu kommen.)
    KeyboardComponent Explaination2_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_Screen
  Routine Explaination_Screen
  Routine Explaination2_Screen
  LoopInitiator trials00_Loop loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = Main-Study-stimuli-Examples.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L0_S127_I87_PEr', 'List': 0, 'List_Ordered': 7, 'List_Randomized': 1, 'Block': 1, 'Sent_ID': 127, 'Sentence_full': 'Janne wartet im Stau. Er ist die ewige Pendlerei leid.', 'Name': 'Janne', 'Name_alt': 'Benja', 'V': 'wartet', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Stau', 'PP_mitPunkt': 'im Stau.', 'PP': 'im Stau', 'PRO': 'Er', 'Pos05': 'ist', 'Pos06': 'die', 'Pos07': 'ewige', 'Was': 'Was tat Janne?', 'Wen': None, 'Pos08': 'Pendlerei', 'Pos09_mitPunkt': 'leid.', 'Pos09': 'leid', 'Item_ID': 87, 'Item': 'Janne', 'Google_Gender': 'n', 'Norming_Rating_Mean': 5.2, 'Normi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,
      {'Stimuli_ID': 'L0_S133_I75_PEr', 'List': 0, 'List_Ordered': 13, 'List_Randomized': 2, 'Block': 1, 'Sent_ID': 133, 'Sentence_full': 'Die Betreuerin sitzt in der Ferienwohnung Sie hat eine schwere Schnitzarbeit angefangen', 'Name': 'Die Betreuerin', 'Name_alt': 'Der Betreuer', 'V': 'sitzt', 'Wo': 'in der', 'Wohin': None, 'Woher': None, 'PP_N': 'Ferienwohnung', 'PP_mitPunkt': 'in der Ferienwohnung.', 'PP': 'in der Ferienwohnung', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'eine', 'Pos07': 'schwere', 'Was': 'Was tat Die Betreuerin?', 'Wen': None, 'Pos08': 'Schnitzarbeit', 'Pos09_mitPunkt': 'angefange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,
      {'Stimuli_ID': 'L0_S121_I21_PEr', 'List': 0, 'List_Ordered': 1, 'List_Randomized': 3, 'Block': 1, 'Sent_ID': 121, 'Sentence_full': 'Benedikt schreit im Supermarkt. Er hat die letzte Mehlpackung zerstört.', 'Name': 'Benedikt', 'Name_alt': 'Andrea', 'V': 'schreit', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Supermarkt', 'PP_mitPunkt': 'im Supermarkt.', 'PP': 'im Supermarkt', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'letzte', 'Was': 'Was tat Benedikt?', 'Wen': None, 'Pos08': 'Mehlpackung', 'Pos09_mitPunkt': 'zerstört.', 'Pos09': 'zerstört', 'Item_ID': 21, 'Item': 'Benedikt', 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,
      {'Stimuli_ID': 'L0_S129_I122_PEr', 'List': 0, 'List_Ordered': 9, 'List_Randomized': 4, 'Block': 1, 'Sent_ID': 129, 'Sentence_full': 'Maja weint auf der Kreuzfahrt. Er hat die andauernde Seekrankheit unterschätzt.', 'Name': 'Maja', 'Name_alt': 'Michele', 'V': 'weint', 'Wo': 'auf der', 'Wohin': None, 'Woher': None, 'PP_N': 'Kreuzfahrt', 'PP_mitPunkt': 'auf der Kreuzfahrt.', 'PP': 'auf der Kreuzfahrt', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'andauernde', 'Was': 'Was tat Maja?', 'Wen': None, 'Pos08': 'Seekrankheit', 'Pos09_mitPunkt': 'unterschätzt.', 'Pos09': 'unterschätzt', 'Item_I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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials00_Loop
  Routine Explaination_Screen3
  LoopInitiator trials01_Loop loopType="TrialHandler"
    Selected rows = 0:26
    conditionsFile = Main-Study-stimuli-L1-B1.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials01_Loop
  Routine Pause
  LoopInitiator trials02_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L1-B2.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials02_Loop
  Routine Pause2
  LoopInitiator trials03_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L1-B3.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials03_Loop
  Routine Pause3
  LoopInitiator trials04_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L1-B4.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials04_Loop
  Routine Pause4
  LoopInitiator trials05_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L1-B5.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials05_Loop
  Routine Pause5
  LoopInitiator trials06_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L1-B6.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials06_Loop
  Routine Blank500
  Routine Goodbye_Screen
