PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'E-Mail-Adresse': '', 'Vorname': '', 'Nachname': '', 'Alter': '', 'Links- oder Rechtshänder': '', 'Zweitsprache (1 geringe Kenntnisse - 10 muttersprachlich)': '', '2. Zweitsprache (1 - 10)': '', '3. Zweitsprache (1 - 10)': '', '4. Zweitsprache (1 - 10)': '', '5. Zweitsprache (1 - 10)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Main-Study-exp
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Routines
  Routine Welcome_Screen
    TextComponent Welcome_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = Hallo und vielen Dank für deine Teilnahme.
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  Routine Goodbye_Screen
    TextComponent Goodbye_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text [set every repeat]:
        Vielen Dank für deine Teilnahme und bis in zwei Wochen.

        Das Programm schließt sich automatisch.
  Routine Blank500
    TextComponent Blank500_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Explaination_Screen
    TextComponent Explaination_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Im folgenden wirst du je zwei Sätze Stück für Stück lesen.

        Das heißt Du wirst immer ein Wort oder ein Satzstück sehen und Du entscheidest, wann du das nächste Stück sehen möchtest. Du kommst immer mit der Leertaste zum nächsten Wort/Satzstück. Es gibt keine Möglichkeit um zurückzukehren.

        Drücke nun die Leertaste um weiterzukommen.
    KeyboardComponent Explaination_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos01_Name
    TextComponent Pos01_Name_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Name
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    KeyboardComponent Pos01_Name_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos02_V
    TextComponent Pos02_V_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $V
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    KeyboardComponent Pos02_V_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos03_PP
    TextComponent Pos03_PP_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $PP_mitPunkt
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    KeyboardComponent Pos03_PP_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos04_PRO
    TextComponent Pos04_PRO_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $PRO
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    KeyboardComponent Pos04_PRO_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos05_3
    TextComponent Pos05_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos05
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    KeyboardComponent Pos05_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos06_2
    TextComponent Pos06_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos06
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    KeyboardComponent Pos06_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos07_2
    TextComponent Pos07_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos07
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    KeyboardComponent Pos07_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pos08_2
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  Routine Pos09_2
    TextComponent Pos09_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Pos09_mitPunkt
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    KeyboardComponent Pos09_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Comp_q
    KeyboardComponent Comp_q_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Comp_q_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Presented
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine Comp_resp
    KeyboardComponent Comp_resp_key_resp
      allowedKeys [set every repeat] = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Comp_Up_resp_text
      letterHeight = 0.08
      pos [set every repeat] = (0,0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Up
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    TextComponent Quest_Down_text
      letterHeight = 0.08
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Quest_Down
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if followUp == 0:
            continueRoutine=False
  Routine Pause
    TextComponent Pause1_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast 17% geschafft.

        Wenn du möchtest kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause1_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause2
    TextComponent Pause2_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast ein Drittel geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause2_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause3
    TextComponent Pause3_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Super! Du hast die Hälfte geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause3_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause4
    TextComponent Pause4_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Du hast zwei Drittel  geschafft.

        Wenn du möchtest, kannst du eine  Pause machen.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause4_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pause5
    TextComponent Pause5_text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Das ist die letzte Pause.

        Du hast es fast geschafft.

        Drücke "P" um fortzufahren.
    KeyboardComponent Pause5_key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explaination_Screen3
    TextComponent Explaination3_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Soweit alles startklar?

        Bitte sorge für ein ruhiges Umfeld und stell dir wenn du magst ein Getränk parat.

        Falls du soweit bist, drücke die Leertaste um das Experiment zu starten.
    KeyboardComponent Explaination3_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Explaination2_Screen
    TextComponent Explaination2_text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Manchmal wirst du eine Frage mit zwei Antwortmöglichkeiten über die Sätze beantworten. Lies die Sätze also möglichst genau aber auch so schnell wie möglich. Es ist immer nur eine Antwortmöglichkeit korrekt.

        Die obere Pfeiltaste wählt die obere Antwort aus und die untere Pfeiltaste wählt die untere Antwortmöglichkeit aus.

        Ca alle 3 bis 5 Minuten hast Du eine Pause.

        Jetzt folgen fünf Beispiele an denen Du die Steuerung testen kannst.

        (Drücke die Leertaste um weiter zu kommen.)
    KeyboardComponent Explaination2_key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome_Screen
  Routine Explaination_Screen
  Routine Explaination2_Screen
  LoopInitiator trials00_Loop loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = Main-Study-stimuli-Examples.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L0_S127_I87_PEr', 'List': 0, 'List_Ordered': 7, 'List_Randomized': 1, 'Block': 1, 'Sent_ID': 127, 'Sentence_full': 'Janne wartet im Stau. Er ist die ewige Pendlerei leid.', 'Name': 'Janne', 'Name_alt': 'Benja', 'V': 'wartet', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Stau', 'PP_mitPunkt': 'im Stau.', 'PP': 'im Stau', 'PRO': 'Er', 'Pos05': 'ist', 'Pos06': 'die', 'Pos07': 'ewige', 'Was': 'Was tat Janne?', 'Wen': None, 'Pos08': 'Pendlerei', 'Pos09_mitPunkt': 'leid.', 'Pos09': 'leid', 'Item_ID': 87, 'Item': 'Janne', 'Google_Gender': 'n', 'Norming_Rating_Mean': 5.2, 'Normi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,
      {'Stimuli_ID': 'L0_S133_I75_PEr', 'List': 0, 'List_Ordered': 13, 'List_Randomized': 2, 'Block': 1, 'Sent_ID': 133, 'Sentence_full': 'Die Betreuerin sitzt in der Ferienwohnung Sie hat eine schwere Schnitzarbeit angefangen', 'Name': 'Die Betreuerin', 'Name_alt': 'Der Betreuer', 'V': 'sitzt', 'Wo': 'in der', 'Wohin': None, 'Woher': None, 'PP_N': 'Ferienwohnung', 'PP_mitPunkt': 'in der Ferienwohnung.', 'PP': 'in der Ferienwohnung', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'eine', 'Pos07': 'schwere', 'Was': 'Was tat Die Betreuerin?', 'Wen': None, 'Pos08': 'Schnitzarbeit', 'Pos09_mitPunkt': 'angefange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,
      {'Stimuli_ID': 'L0_S121_I21_PEr', 'List': 0, 'List_Ordered': 1, 'List_Randomized': 3, 'Block': 1, 'Sent_ID': 121, 'Sentence_full': 'Benedikt schreit im Supermarkt. Er hat die letzte Mehlpackung zerstört.', 'Name': 'Benedikt', 'Name_alt': 'Andrea', 'V': 'schreit', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Supermarkt', 'PP_mitPunkt': 'im Supermarkt.', 'PP': 'im Supermarkt', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'letzte', 'Was': 'Was tat Benedikt?', 'Wen': None, 'Pos08': 'Mehlpackung', 'Pos09_mitPunkt': 'zerstört.', 'Pos09': 'zerstört', 'Item_ID': 21, 'Item': 'Benedikt', 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,
      {'Stimuli_ID': 'L0_S129_I122_PEr', 'List': 0, 'List_Ordered': 9, 'List_Randomized': 4, 'Block': 1, 'Sent_ID': 129, 'Sentence_full': 'Maja weint auf der Kreuzfahrt. Er hat die andauernde Seekrankheit unterschätzt.', 'Name': 'Maja', 'Name_alt': 'Michele', 'V': 'weint', 'Wo': 'auf der', 'Wohin': None, 'Woher': None, 'PP_N': 'Kreuzfahrt', 'PP_mitPunkt': 'auf der Kreuzfahrt.', 'PP': 'auf der Kreuzfahrt', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'andauernde', 'Was': 'Was tat Maja?', 'Wen': None, 'Pos08': 'Seekrankheit', 'Pos09_mitPunkt': 'unterschätzt.', 'Pos09': 'unterschätzt', 'Item_I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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials00_Loop
  Routine Explaination_Screen3
  LoopInitiator trials01_Loop loopType="TrialHandler"
    Selected rows = 0:26
    conditionsFile = Main-Study-stimuli-L3-B1.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials01_Loop
  Routine Pause
  LoopInitiator trials02_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L3-B2.xlsx
    loopType = sequential
    nReps = 1
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    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials02_Loop
  Routine Pause2
  LoopInitiator trials03_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L3-B3.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L_S125_I62_PEr', 'List': None, 'List_Ordered': 5, 'List_Randomized': 48, 'Block': 2.9, 'Sent_ID': 125, 'l': 'Florin bangt auf der Rennbahn. Er hat die gesamten Ersparnisse verwettet.', 'Name': 'Florin', 'Name_alt': 'Juna', 'V': 'bangt', 'Wo': 'auf der', 'Wohin': None, 'Woher': None, 'PP_N': 'Rennbahn', 'PP_mitPunkt': 'auf der Rennbahn.', 'PP': 'auf der Rennbahn', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'gesamten', 'Was': 'Was tat Florin?', 'Wen': None, 'Pos08': 'Ersparnisse', 'Pos09_mitPunkt': 'verwettet.', 'Pos09': 'verwettet', 'Item_ID': 62, 'Item': 'Florin', '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,
      {'Stimuli_ID': 'L3_S44_I66_PEr', 'List': 3, 'List_Ordered': 44, 'List_Randomized': 49, 'Block': 3, 'Sent_ID': 44, 'l': 'Sam faulenzt im Sessel. Er hat einen harten Arbeitstag gehabt.', 'Name': 'Sam', 'Name_alt': 'Selina', 'V': 'faulenzt', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Sessel', 'PP_mitPunkt': 'im Sessel.', 'PP': 'im Sessel', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'einen', 'Pos07': 'harten', 'Was': 'Was tat Sam?', 'Wen': None, 'Pos08': 'Arbeitstag', 'Pos09_mitPunkt': 'gehabt.', 'Pos09': 'gehabt', 'Item_ID': 66, 'Item': 'Sam', 'Google_Gender': 'n', 'Norming_Rating_Mean': 3.314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,
      {'Stimuli_ID': 'L3_S24_I4_PEr', 'List': 3, 'List_Ordered': 24, 'List_Randomized': 50, 'Block': 3, 'Sent_ID': 24, 'l': 'Moritz hüpft in der Küche. Er möchte den oberen Hängeschrank erreichen.', 'Name': 'Moritz', 'Name_alt': 'Finn', 'V': 'hüpft', 'Wo': 'in der', 'Wohin': None, 'Woher': None, 'PP_N': 'Küche', 'PP_mitPunkt': 'in der Küche.', 'PP': 'in der Küche', 'PRO': 'Er', 'Pos05': 'möchte', 'Pos06': 'den', 'Pos07': 'oberen', 'Was': 'Was tat Moritz?', 'Wen': None, 'Pos08': 'Hängeschrank', 'Pos09_mitPunkt': 'erreichen.', 'Pos09': 'erreichen', 'Item_ID': 4, 'Item': 'Moritz', 'Google_Gender': 'm',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,
      {'Stimuli_ID': 'L3_S53_I75_PSie', 'List': 3, 'List_Ordered': 53, 'List_Randomized': 51, 'Block': 3, 'Sent_ID': 53, 'l': 'Charlie kommt vom Kiosk. Sie hat ein leckeres Snickers gekauft.', 'Name': 'Charlie', 'Name_alt': 'Hans', 'V': 'kommt', 'Wo': None, 'Wohin': None, 'Woher': 'vom', 'PP_N': 'Kiosk', 'PP_mitPunkt': 'vom Kiosk.', 'PP': 'vom Kiosk', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'ein', 'Pos07': 'leckeres', 'Was': 'Was tat Charlie?', 'Wen': None, 'Pos08': 'Snickers', 'Pos09_mitPunkt': 'gekauft.', 'Pos09': 'gekauft', 'Item_ID': 75, 'Item': 'Charlie', 'Google_Gender': 'n', 'Norming_Rating_Me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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials03_Loop
  Routine Pause3
  LoopInitiator trials04_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L3-B4.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L_S137_I150_PEr', 'List': None, 'List_Ordered': 15, 'List_Randomized': 69, 'Block': 3.9, 'Sent_ID': 137, 'l': 'Der Gynäkologe spricht auf der Kundgebung Sie hat eine lange Rede vorbereitet', 'Name': 'Der Gynäkologe', 'Name_alt': 'Die Gynäkologin', 'V': 'spricht', 'Wo': 'auf der', 'Wohin': None, 'Woher': None, 'PP_N': 'Kundgebung', 'PP_mitPunkt': 'auf der Kundgebung.', 'PP': 'auf der Kundgebung', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'eine', 'Pos07': 'lange', 'Was': 'Was tat der Gynäkologe?', 'Wen': None, 'Pos08': 'Rede', 'Pos09_mitPunkt': 'vorbereitet.', 'Pos09': 'vorbereitet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,
      {'Stimuli_ID': 'L3_S67_I150_PEr', 'List': 3, 'List_Ordered': 67, 'List_Randomized': 70, 'Block': 4, 'Sent_ID': 67, 'l': 'Die Babysitterin steigt auf das Skateboard. Er möchte die junge Nachbarin beeindrucken.', 'Name': 'Die Babysitterin', 'Name_alt': 'Der Babysitter', 'V': 'steigt', 'Wo': None, 'Wohin': 'auf das', 'Woher': None, 'PP_N': 'Skateboard', 'PP_mitPunkt': 'auf das Skateboard.', 'PP': 'auf das Skateboard', 'PRO': 'Er', 'Pos05': 'möchte', 'Pos06': 'die', 'Pos07': 'junge', 'Was': 'Was tat die Babysitterin?', 'Wen': 'Nachbarin', 'Pos08': 'Nachbarin', 'Pos09_mitPunkt': 'beeindrucken.', 'P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,
      {'Stimuli_ID': 'L3_S25_I5_PEr', 'List': 3, 'List_Ordered': 25, 'List_Randomized': 71, 'Block': 4, 'Sent_ID': 25, 'l': 'Paul schwimmt in der Ostsee. Er hat das kalte Wasser gern.', 'Name': 'Paul', 'Name_alt': 'Hannes', 'V': 'schwimmt', 'Wo': 'in der', 'Wohin': None, 'Woher': None, 'PP_N': 'Ostsee', 'PP_mitPunkt': 'in der Ostsee.', 'PP': 'in der Ostsee', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'das', 'Pos07': 'kalte', 'Was': 'Was tat Paul?', 'Wen': None, 'Pos08': 'Wasser', 'Pos09_mitPunkt': 'gern.', 'Pos09': 'gern', 'Item_ID': 5, 'Item': 'Paul', 'Google_Gender': 'm', 'Norming_Rating_Mean': 1.11428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,
      {'Stimuli_ID': 'L3_S15_I138_PSie', 'List': 3, 'List_Ordered': 15, 'List_Randomized': 72, 'Block': 4, 'Sent_ID': 15, 'l': 'Anna strickt im Pflegeheim. Sie hat eine gute Freundschaft geschlossen.', 'Name': 'Anna', 'Name_alt': 'Josephine', 'V': 'strickt', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Pflegeheim', 'PP_mitPunkt': 'im Pflegeheim.', 'PP': 'im Pflegeheim', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'eine', 'Pos07': 'gute', 'Was': 'Was tat Anna?', 'Wen': None, 'Pos08': 'Freundschaft', 'Pos09_mitPunkt': 'geschlossen.', 'Pos09': 'geschlossen', 'Item_ID': 138, 'Item': 'Anna', 'Google_Gen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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials04_Loop
  Routine Pause4
  LoopInitiator trials05_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L3-B5.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L_S122_I22_PSie', 'List': None, 'List_Ordered': 2, 'List_Randomized': 90, 'Block': 4.9, 'Sent_ID': 122, 'l': 'Konstantin wartet im Schlafzimmer. Sie hat ein erfolgreiches Date gehabt.', 'Name': 'Konstantin', 'Name_alt': 'Leo', 'V': 'wartet', 'Wo': 'im', 'Wohin': None, 'Woher': None, 'PP_N': 'Schlafzimmer', 'PP_mitPunkt': 'im Schlafzimmer.', 'PP': 'im Schlafzimmer', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'ein', 'Pos07': 'erfolgreiches', 'Was': 'Was tat Konstantin?', 'Wen': None, 'Pos08': 'Date', 'Pos09_mitPunkt': 'gehabt.', 'Pos09': 'gehabt', 'Item_ID': 22, 'Item': 'Konstantin'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,
      {'Stimuli_ID': 'L3_S108_I191_PEr', 'List': 3, 'List_Ordered': 108, 'List_Randomized': 91, 'Block': 5, 'Sent_ID': 108, 'l': 'Der Astronaut landet in der Anstalt. Er hat einen schweren Burnout erlitten.', 'Name': 'Der Astronaut', 'Name_alt': 'Die Astronautin', 'V': 'landet', 'Wo': 'in der', 'Wohin': None, 'Woher': None, 'PP_N': 'Anstalt', 'PP_mitPunkt': 'in der Anstalt.', 'PP': 'in der Anstalt', 'PRO': 'Er', 'Pos05': 'hat', 'Pos06': 'einen', 'Pos07': 'schweren', 'Was': 'Was tat der Astronaut?', 'Wen': None, 'Pos08': 'Burnout', 'Pos09_mitPunkt': 'erlitten.', 'Pos09': 'erlitten', 'Item_ID': 191, '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,
      {'Stimuli_ID': 'L3_S97_I180_PSie', 'List': 3, 'List_Ordered': 97, 'List_Randomized': 92, 'Block': 5, 'Sent_ID': 97, 'l': 'Der Statistiker rodelt vom Hügel. Sie hat diesen weißen Winter Spaß.', 'Name': 'Der Statistiker', 'Name_alt': 'Die Statistikerin', 'V': 'rodelt', 'Wo': None, 'Wohin': None, 'Woher': 'vom', 'PP_N': 'Hügel', 'PP_mitPunkt': 'vom Hügel.', 'PP': 'vom Hügel', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'diesen', 'Pos07': 'weißen', 'Was': 'Was tat der Statistiker?', 'Wen': None, 'Pos08': 'Winter', 'Pos09_mitPunkt': 'Spaß.', 'Pos09': 'Spaß', 'Item_ID': 180, 'Item': 'Statistiker', 'Googl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,
      {'Stimuli_ID': 'L3_S51_I73_PSie', 'List': 3, 'List_Ordered': 51, 'List_Randomized': 93, 'Block': 5, 'Sent_ID': 51, 'l': 'Jona stolpert in die Bar. Sie hat die erste Anzahlung erhalten.', 'Name': 'Jona', 'Name_alt': 'Fabian', 'V': 'stolpert', 'Wo': None, 'Wohin': 'in die', 'Woher': None, 'PP_N': 'Bar', 'PP_mitPunkt': 'in die Bar.', 'PP': 'in die Bar', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'erste', 'Was': 'Was tat Jona?', 'Wen': None, 'Pos08': 'Anzahlung', 'Pos09_mitPunkt': 'erhalten.', 'Pos09': 'erhalten', 'Item_ID': 73, 'Item': 'Jona', 'Google_Gender': 'n', 'Norming_Rating_Mea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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials05_Loop
  Routine Pause5
  LoopInitiator trials06_Loop loopType="TrialHandler"
    Selected rows = 0:21
    conditionsFile = Main-Study-stimuli-L3-B6.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stimuli_ID': 'L_S126_I83_PSie', 'List': None, 'List_Ordered': 6, 'List_Randomized': 111, 'Block': 5.9, 'Sent_ID': 126, 'l': 'Eike kommt vom Friedhof. Sie hat die werte Großmutter besucht.', 'Name': 'Eike', 'Name_alt': 'Liam', 'V': 'kommt', 'Wo': None, 'Wohin': None, 'Woher': 'vom', 'PP_N': 'Friedhof', 'PP_mitPunkt': 'vom Friedhof.', 'PP': 'vom Friedhof', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'die', 'Pos07': 'werte', 'Was': 'Was tat Eike?', 'Wen': 'Großmutter', 'Pos08': 'Großmutter', 'Pos09_mitPunkt': 'besucht.', 'Pos09': 'besucht', 'Item_ID': 83, 'Item': 'Eike', 'Google_Gender': 'n', 'Norm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,
      {'Stimuli_ID': 'L3_S45_I67_PEr', 'List': 3, 'List_Ordered': 45, 'List_Randomized': 112, 'Block': 6, 'Sent_ID': 45, 'l': 'Bente erwacht am Bahnhof. Er ist mit dem Nachtzug gefahren.', 'Name': 'Bente', 'Name_alt': 'Jasmin', 'V': 'erwacht', 'Wo': 'am', 'Wohin': None, 'Woher': None, 'PP_N': 'Bahnhof', 'PP_mitPunkt': 'am Bahnhof.', 'PP': 'am Bahnhof', 'PRO': 'Er', 'Pos05': 'ist', 'Pos06': 'mit', 'Pos07': 'dem', 'Was': 'Was tat Bente?', 'Wen': None, 'Pos08': 'Nachtzug', 'Pos09_mitPunkt': 'gefahren.', 'Pos09': 'gefahren', 'Item_ID': 67, 'Item': 'Bente', 'Google_Gender': 'n', 'Norming_Rating_Mean': 3.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,
      {'Stimuli_ID': 'L3_S71_I154_PSie', 'List': 3, 'List_Ordered': 71, 'List_Randomized': 113, 'Block': 6, 'Sent_ID': 71, 'l': 'Die Eiskunstläuferin schläft auf der Arbeit. Sie muss die lange Nacht überstehen.', 'Name': 'Die Eiskunstläuferin', 'Name_alt': 'Der Eiskunstläufer', 'V': 'schläft', 'Wo': 'auf der', 'Wohin': None, 'Woher': None, 'PP_N': 'Arbeit', 'PP_mitPunkt': 'auf der Arbeit.', 'PP': 'auf der Arbeit', 'PRO': 'Sie', 'Pos05': 'muss', 'Pos06': 'die', 'Pos07': 'lange', 'Was': 'Was tat die Eiskunstläuferin?', 'Wen': None, 'Pos08': 'Nacht', 'Pos09_mitPunkt': 'überstehen.', 'Pos09': 'überstehe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,
      {'Stimuli_ID': 'L3_S117_I200_PSie', 'List': 3, 'List_Ordered': 117, 'List_Randomized': 114, 'Block': 6, 'Sent_ID': 117, 'l': 'Der Dachdecker kommt vom Vortrag. Sie hat heute wieder Nichts gelernt.', 'Name': 'Der Dachdecker', 'Name_alt': 'Die Dachdeckerin', 'V': 'kommt', 'Wo': None, 'Wohin': None, 'Woher': 'vom', 'PP_N': 'Vortrag', 'PP_mitPunkt': 'vom Vortrag.', 'PP': 'vom Vortrag', 'PRO': 'Sie', 'Pos05': 'hat', 'Pos06': 'heute', 'Pos07': 'wieder', 'Was': 'Was tat der Dachdecker?', 'Wen': None, 'Pos08': 'Nichts', 'Pos09_mitPunkt': 'gelernt.', 'Pos09': 'gelernt', 'Item_ID': 200, 'Item': 'Dachdec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
    Routine Blank500
    Routine Pos01_Name
    Routine Pos02_V
    Routine Pos03_PP
    Routine Pos04_PRO
    Routine Pos05_3
    Routine Pos06_2
    Routine Pos07_2
    Routine Pos08_2
    Routine Pos09_2
    Routine Blank500
    Routine Comp_q
    Routine Comp_resp
  LoopTerminator trials06_Loop
  Routine Blank500
  Routine Goodbye_Screen
