PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'Vorname': '', 'Nachname': '', 'Mit welchem Geschlecht identifiziert du dich? (m,w,nicht-binär,keine Angabe)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = BA-Post-Hoc-Study
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Routines
  Routine WelcomeScreen
    TextComponent text_WelcomeScreen
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text [set every repeat] = Hallo und vielen Dank, dass Du am zweiten und letzten Teil meiner Studie teilnimmst.
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  Routine GoodbyeScreen
    TextComponent text_GoodbyeScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Vielen Dank, dass Du an meinem Experiment teilgenommen hast.

        Wenn du mir deine Zahlungsdetails noch nicht genannt hast, kannst du mir gerne eine Email senden.

        Drücke die Leertaste um das Experiment zu beenden.

        Tschüss.
    KeyboardComponent key_resp_Goodbye
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
    TextComponent text_Trial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Post_Hoc_Item
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    SliderComponent slider_Trial
      forceEndRoutine = True
      granularity = 1
      labels = "sehr männlich", "", "", "neutral", "", "", "sehr weiblich"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Blank500
    TextComponent text_Blank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Blank1000
    TextComponent text_Blank1000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Intro1
    TextComponent text_Intro1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Wie auch beim ersten Teil der Studie navigierst du mit der Leertaste.

        Aufgrund von Komplexität beschränke ich mich auf diese Begriffe

        (Drücke die Leertaste um fortzufahren.)
    KeyboardComponent key_resp_Intro1
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro2
    TextComponent text_Intro2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Im Folgenden wirst Du einen Namen sehen sowie einen 7-stelligen Slider. Du bewertest den Namen von ganz links "sehr männlich" bis ganz rechts "sehr weiblich". Die Mitte der Skala zeigt "neutral" an.

        Zum Beispiel würde ich "Uwe" als "sehr männlich", "Gudrun" als "sehr weiblich" und "Alex" als "neutral" bewerten.

        Es steht dir frei die Zwischenstufen zu benutzen.

        (Drücke die Leertaste.)
    KeyboardComponent key_resp_Intro2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Warm_Up
    TextComponent text_WarmUp
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $Post_Hoc_Item
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    SliderComponent slider_Buffer
      forceEndRoutine = True
      granularity = 1
      labels = "sehr männlich", "", "", "neutral", "", "", "sehr weiblich"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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  Routine Pause
    TextComponent text_Pause
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Super! Du hast die Hälfte geschafft.

        Du hast dir eine Pause verdient.

        Weiter geht es, wenn du "P" drückst
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro4
    TextComponent text_Intro4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Wie Du gesehen hast, geht es nachdem du auf den Slider klickst sofort weiter. Sei also vorsichtig bei deiner Auswahl und klicke bitte auf, und nicht zwischen die Schnittstellen.

        Du hast kein Zeitlimit.

        Nach ca 5 bis 7 Minuten hast du eine Pause

        Drücke die Leertaste um das Experiment zu starten.
    KeyboardComponent key_resp_Intro4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro3
    TextComponent text_Intro3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Wichtig ist, NICHT die assoziierten Qualitäten des Namens zu bewerten (Gudrun klingt hart/stark also "männlich"), sondern ob Du eher an einen Mann (der Uwe), eine Frau (die Gudrun) oder vielleicht beide (der/die Alex) denkst.

        Klicke mit der Maus auf einen der sieben Punkte an dem du denkst, wo sich der Name deiner Meinung nach befindet.

        Nun Folgen drei Beispiele, an denen Du die Steuerung testen kannst.

        (Drücke die Leertaste.)
    KeyboardComponent key_resp_Intro3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Intro2
  Routine Intro3
  LoopInitiator trials_Warm_Up loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Post-Hoc-Warm-Up.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Post_Hoc_ID': 0.1, 'Post_Hoc_Item': 'Uwe'},
      {'Post_Hoc_ID': 0.2, 'Post_Hoc_Item': 'Gudrun'},
      {'Post_Hoc_ID': 0.3, 'Post_Hoc_Item': 'Alex'}]
    Routine Blank500
    Routine Warm_Up
  LoopTerminator trials_Warm_Up
  Routine Intro4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Post-Hoc-List1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Post_Hoc_ID': 1, 'Post_Hoc_': 'Jakob', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 2, 'Post_Hoc_': 'Georg', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 3, 'Post_Hoc_': 'Julius', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 4, 'Post_Hoc_': 'Moritz', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 8, 'Post_Hoc_': 'Thomas', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 9, 'Post_Hoc_': 'Johannes', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 11, 'Post_Hoc_': 'Lukas', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 12, 'Post_Hoc_': 'Peter', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 14, 'Post_Hoc_': 'Oliver', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 15, 'Post_Hoc_': 'Felix', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 16, 'Post_Hoc_': 'Patrick', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 17, 'Post_Hoc_': 'Anton', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 18, 'Post_Hoc_': 'Oskar', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 22, 'Post_Hoc_': 'Konstantin', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 23, 'Post_Hoc_': 'Fabian', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'}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
    Routine Blank500
    Routine Trial
  LoopTerminator trials
  Routine Pause
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Post-Hoc-List2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Post_Hoc_ID': 5, 'Post_Hoc_': 'Paul', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 6, 'Post_Hoc_': 'Tobias', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 7, 'Post_Hoc_': 'Maximilian', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 10, 'Post_Hoc_': 'Hugo', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 13, 'Post_Hoc_': 'Matteo', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 19, 'Post_Hoc_': 'Sebastian', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 20, 'Post_Hoc_': 'Erik', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 21, 'Post_Hoc_': 'Benedikt', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 28, 'Post_Hoc_': 'Michael', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 29, 'Post_Hoc_': 'Timo', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 30, 'Post_Hoc_': 'Karl', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 31, 'Post_Hoc_': 'Adrian', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 35, 'Post_Hoc_': 'Florian', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 36, 'Post_Hoc_': 'Finn', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'},
      {'Post_Hoc_ID': 39, 'Post_Hoc_': 'Simon', 'Norming_Rating_Median': 1, 'Norming_Item_Class': 'm'}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
    Routine Blank500
    Routine Trial
  LoopTerminator trials_2
  Routine Blank1000
  Routine GoodbyeScreen
